PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = offline_module
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Routines
  Routine instr
    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Willkommen beim Experiment. Dies ist das Offline-Modul, in dem Ihnen ein Wort angezeigt wird. Nachdem das Wort dargestellt wurde, erscheint ein Fixationskreuz. Sobald dieses erscheint müssen Sie sich so lange das Wort vorstellen, bis das Fixationskreuz wieder verschwindet.


        Dieser Ablauf wird dreimal pro Wort, für mehrere Wörter, wiederholt. Wenn Sie diesen Text verstanden haben, drücken Sie die ’Leertaste' um fortzufahren
    KeyboardComponent space_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr2
  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $word
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    PolygonComponent fix_cross
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.75
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    PolygonComponent fix_cross2
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 4.75
      stopVal [duration (s)] = 1
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    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 5.75
      stopVal [duration (s)] = 1.75
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    PolygonComponent fix_cross3
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 7.5
      stopVal [duration (s)] = 1.0
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    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 8.5
      stopVal [duration (s)] = 1.75
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = fullRandom
    nReps = 15
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    conditions:
      [OrderedDict([('word', 'Schraube')]),
      OrderedDict([('word', 'Platine')]),
      OrderedDict([('word', 'Gehaüse')]),
      OrderedDict([('word', 'Werkbank')]),
      OrderedDict([('word', 'Fließband')]),
      OrderedDict([('word', 'Boden')]),
      OrderedDict([('word', 'Lege')]),
      OrderedDict([('word', 'Halte')]),
      OrderedDict([('word', 'Hebe')])]
    Routine trial
  LoopTerminator trials
